PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nBack
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        thisExp.addData('eegtime', eeg.setMarker())
    TextComponent n_back_one
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every repeat]:
        $stimuli_letter
    KeyboardComponent Key_one
      allowedKeys = 'z'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.1
      storeCorrect = True
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  Routine WelcomeScreen
    TextComponent WelcomeScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Welcome to the n-back task
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    TextComponent WelcomeInstructions
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        Sequences of letter will flash on your screen.
        You must decide if you saw the same letter immediately before.

        For example: A-X-X-D-L

        In this example, when the letter X appears for the second time,
        you must press the Z key.

        Press the Z key to continue.
    KeyboardComponent keyWelcome
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import EEGController
        eeg = EEGController.EEGController()
  Routine Blank500
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine GoodByeScreen
    TextComponent GoodBye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = THANK YOU FOR PARTICIPATING.
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Experiment:
        eeg.close()
  Routine Blank1500
    TextComponent ISI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = +
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  Routine trial_two
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        thisExp.addData('eegtime', eeg.setMarker())
    TextComponent Block_2_stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every repeat]:
        $Letter_stimulus
    KeyboardComponent key_Two
      allowedKeys = 'z'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.1
      storeCorrect = True
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  Routine Two_Instructions
    TextComponent Intro_Block_two
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        NEW INSTRUCTIONS

        You must decide if you saw the same letter 2-steps before.

        For example: A-B-C-B-L

        In this example, when the letter B appears for the second AFTER 2-steps,
        you must press the Z key.

        Press the Z key to continue.
    KeyboardComponent Start_Block_One
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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Flow
  Routine WelcomeScreen
  Routine Blank500
  LoopInitiator trialsOne loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = sequential
    nReps = 1
    random seed = 1
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    conditions:
      [{'stimuli_letter': 'V', 'target': None, 'correct_key': None},
      {'stimuli_letter': 'X', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'A', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'A', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'X', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'B', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'B', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'X', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'Y', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'Y', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'B', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'Y', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'V', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'C', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'C', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'V', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'X', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'Y', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'C', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'C', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'A', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'W', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'X', 'target': 'N', 'correct_key': None},
      {'stimuli_letter': 'X', 'target': 'Y', 'correct_key': 'z'},
      {'stimuli_letter': 'A', 'target': 'N', 'correct_key': None}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
    Routine trial
    Routine Blank1500
  LoopTerminator trialsOne
  Routine Two_Instructions
  LoopInitiator trialsTwo loopType="TrialHandler"
    conditionsFile = loopTemplate2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Letter_stimulus': 'V', 'target': None, 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': None, 'correct_key': None},
      {'Letter_stimulus': 'X', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'V', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'Y', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'C', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'Y', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'C', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'B ', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'Y', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'B', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'Y', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'C', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'A', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'B', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'V', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'X', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'W', 'target': 'Y', 'correct_key': 'z'},
      {'Letter_stimulus': 'A', 'target': 'N', 'correct_key': None},
      {'Letter_stimulus': 'X', 'target': 'N', 'correct_key': None}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
    Routine trial_two
    Routine Blank1500
  LoopTerminator trialsTwo
  Routine Blank500
  Routine GoodByeScreen
